OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  Ondas cerebrales
   limpiamos datos espúreos

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter "Filtro Butt 1-100Hz"
  Filter method = Butterworth
  Filter type = Low pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.5
-> Windowing none => #2
  Window method = None
Data=#2 -> Signal display "Signal 2"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#2 -> Spectral Analysis => #4
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#4.Amplitude -> Delta 1:4 => #5
  Frequencies to select = 1:4
-> Spectrum Average
  Considers zeros = false
#5 -> Delta Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#4.Amplitude -> Theta 4:8 => #8
  Frequencies to select = 4:8
-> Spectrum Average
  Considers zeros = false
#8 -> Theta Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#4.Amplitude -> Alpha 8:13 => #11
  Frequencies to select = 8:13
-> Spectrum Average
  Considers zeros = false
#11 -> Alpha Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#4.Amplitude -> Beta 13:30 => #14
  Frequencies to select = 13:30
-> Spectrum Average
  Considers zeros = false
#14 -> Beta Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
#4.Amplitude -> Gamma 30:100 => #17
  Frequencies to select = 30:100
-> Spectrum Average
  Considers zeros = false
#17 -> Gamma Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}

2 Noise generator
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 32
