OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  OSC conectado a localhost:9999
  para su recepcion en Pd
  Para usar tras la "feature extraction"
Comment
  Identity solo sirve para cambiar fácilmente entre señales de entrada

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Temporal filter "Delta 1-4Hz"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #3
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#3.Mean -> Integral orden 15
  Operation = Integral
  Order = 15
-> OSC /eeg/delta/media
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/delta/media
#1 -> Temporal filter "Theta 4-8Hz"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #7
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#7.Mean -> Integral orden 15
  Operation = Integral
  Order = 15
-> OSC /eeg/theta/media
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/theta/media
#1 -> Temporal filter "Alpha 8-13 Hz"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #11
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#11.Mean -> Integral orden 15
  Operation = Integral
  Order = 15
-> OSC /eeg/alpha/media
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/alpha/media
#1 -> Temporal filter "Beta 13-30Hz"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #15
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#15.Mean -> Integral orden 15
  Operation = Integral
  Order = 15
-> OSC /eeg/beta/media
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/beta/media
#1 -> Temporal filter "Gamma 30-100 Hz" => #18
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 30
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.5
Data=#18 -> Signal display "Signal 1"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#18 -> Univariate Statistics => #20
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
Data=#20.Mean -> Signal display "integral de la media"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#20.Mean -> Integral orden 15 => #22
  Operation = Integral
  Order = 120
-> OSC /eeg/gamma/media
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/gamma/media
Data=#22 -> Signal display "integral de la media"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false

2 Noise generator
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 32

Simple DSP
  Equation = x

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32

Min/Max detection
  Min/Max = Max
  Time window start = 300
  Time window end = 500

Signal average
