OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  Identity solo sirve para cambiar fácilmente entre señales de entrada

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Temporal filter "Delta 1-4Hz" => #2
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
-> Puerto 50004
  Port = 50004
  Output format = Raw
Data=#2 -> Signal display "Signal 50004"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#1 -> Temporal filter "Theta 4-8Hz" => #5
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Puerto 50008
  Port = 50008
  Output format = Raw
Data=#5 -> Signal display "Signal 50008"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#1 -> Temporal filter "Alpha 8-13 Hz" => #8
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Puerto 50013
  Port = 50013
  Output format = Raw
Data=#8 -> Signal display "Signal 50013"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#1 -> Temporal filter "Beta 13-30Hz" => #11
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Puerto 50030
  Port = 50030
  Output format = Raw
Data=#11 -> Signal display "Signal 50030"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#1 -> Temporal filter "Gamma 30-100 Hz" => #14
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 30
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.5
-> Puerto 50100
  Port = 50100
  Output format = Raw
Data=#14 -> Signal display "Signal 50100"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false

2 Noise generator
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 32
