OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  OSC conected to
   localhost:9999 for reception at Pd
   localhost:9998 for reception at NeuroCine (OF)
Comment
  Identity is only a placeholder
  to easily change signal input

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Identity => #2
-> Temporal filter "Delta 1-4Hz"
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #4
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#4.Mean -> 9999 /eeg/delta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/delta/mean
#4.Mean -> 9998 /eeg/delta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/delta/mean
#2 -> Temporal filter "Theta 4-8Hz" => #7
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #8
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#8.Mean -> 9999 /eeg/theta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/theta/mean
#8.Mean -> 9998 /eeg/theta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/theta/mean
#2 -> Temporal filter "Alpha 8-13 Hz" => #11
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Univariate Statistics => #12
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#12.Mean -> 9999 /eeg/alpha/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/alpha/mean
#12.Mean -> 9998 /eeg/alpha/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/alpha/mean
#2 -> Temporal filter "Beta 13-30Hz" => #15
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
Input - A=#7, Input - B=#15 -> Simple DSP "Valence?=beta/theta"
  Equation = B/A
-> Univariate Statistics => #17
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#17.Mean -> 9999 /eeg/valence/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/valence/mean
#17.Mean -> 9998 /eeg/valence/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/valence/mean
Input - A=#11, Input - B=#15 -> Simple DSP "Arousal=beta/alpha"
  Equation = B/A
-> Univariate Statistics => #21
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
Data=#21.Mean -> Signal display "Arousal display"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#21.Mean -> 9999 /eeg/arousal/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/arousal/mean
#21.Mean -> 9998 /eeg/arousal/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/arousal/mean
#15 -> Univariate Statistics => #25
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
#25.Mean -> 9999 /eeg/beta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/beta/mean
#25.Mean -> 9998 /eeg/beta/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/beta/mean
#2 -> Temporal filter "Gamma 30-100 Hz" => #28
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 30
  High cut frequency (Hz) = 100
  Pass band ripple (dB) = 0.5
Data=#28 -> Signal display "gamma signal"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#28 -> Univariate Statistics => #30
  Mean = true
  Variance = false
  Range = false
  Median = false
  IQR = false
  Percentile = true
  Percentile value = 30
Data=#30.Mean -> Signal display "gamma mean"
  Display Mode = Scroll
  Auto vertical scale = Global
  Scale refresh interval (secs) = 1.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 20.000000
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#30.Mean -> 9999 /eeg/gamma/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9999
  OSC Address = /eeg/gamma/mean
#30.Mean -> 9998 /eeg/gamma/mean
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9998
  OSC Address = /eeg/gamma/mean

2 Noise generator
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 32

Min/Max detection
  Min/Max = Max
  Time window start = 300
  Time window end = 500

Signal average
